config:
  title: My Workflow
  description: A workflow that does x, y and z
  copyright: My Organization
  version: 0.0.1
  authors: [{name: First Last, affiliation: A Place}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  acknowledgements: [{name: First Last, affiliation: A Place}]
  github: {user: malloc3, repo: YG_Harmonization}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: BiotekPlateReaderCalibration, category: YG_Harmonization}
code_source:
needs 'Standard Libs/MatrixTools'
needs 'YG_Harmonization/PlateReaderMethods'
# This module is used for doing the extraction and calculations required to
# successfully calibrate the Biotek Plate reader
#
module BiotekPlateReaderCalibration
    include PlateReaderMethods
    include MatrixTools
    require 'csv'
    require 'open-uri'

    CAL_TEMPLATE_FILENAME = "calibration_template_v1"
    CAL_MEASUREMENTS = ['cal_od', 'cal_gfp']

  # Takes in a csv upload file, extracts the information on it
  # into a datamatrix object which is returned.
  # Specificly tuned to the output file of the biotek plate reader.
  #
  # @param upload [Upload]  the object which can be resolved to calibration csv
  # @return [WellMatrix]  a WellMatrix holding the measurement for each well
  def extract_measurement_matrix_from_csv(upload)
    url = upload.url
    table = []
    CSV.new(open(url)).each { |line| table.push(line) }
    dm = WellMatrix.create_empty(96, 'NA') if table.size > 25
    dm = WellMatrix.create_empty(24, 'NA') if table.size <= 25
    table.each_with_index do |row, idx|
      next if idx.zero?
      well_coord = row[2]
      next if well_coord.nil?
      measurement = row[3].to_f
      next if measurement.nil?
      dm.set(well_coord, measurement)
    end
    dm
  end

    # Returns the average OD measurement for different dilutions and well volumes.
    # The plotted result of this method can be fit to a curve
    # to be used for calibrating the plate reader. This is very specific to the
    # Eriberto's calibration of the biotek plate reader.
    #
    # @param upload [Upload]  the object whihc can be resolved to calibration csv
    # @return [Hash]  a hash containing averaged measurements for every concentration and volume tested
    def get_calibration_data_hash(upload)
        method = upload.name
        dm = extract_measurement_matrix_from_csv(upload)
        result = {}
        data_by_conc = Hash.new { |h, key| h[key] = [0, 0] }

        if method.include? 'gfp'
            show {note "#{method}"}
            starting_concentration = 50.0#uM
            # first 4 rows are serial dilutions
            for i in 0...4
              12.times do |j|
                # each column is a 2x dilution of the previous, starting at 50uM
                this_conc = starting_concentration / (2**j)
                data = data_by_conc[this_conc]
                data[0] += dm[i, j].to_f
                data[1] += 1
                data_by_conc[this_conc] = data
              end
            end
            # add serial dilution averages to result hash
            data_by_conc.each_key do |k,|
              data = data_by_conc[k]
              result[k] = data[0] / data[1]
            end
            return result
        elsif method.include? 'od'
            # row 5, 6 are lud dilutions and pure solution respectively
            for i in 4...6
                for j in 0...4
                    data_by_conc["100_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["100_#{i}"][1] += 1
                end
                for j in 4...8
                    data_by_conc["200_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["200_#{i}"][1] += 1
                end
                for j in 8...12
                    data_by_conc["300_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["300_#{i}"][1] += 1
                end
            end
            # add lud averages to result hash
            for i in 1..3
              lud_avg = data_by_conc["#{i}00_4"][0] / data_by_conc["#{i}00_4"][1]
              sol_avg = data_by_conc["#{i}00_5"][0] / data_by_conc["#{i}00_5"][1]
              result["lud#{i}00"] = (lud_avg - sol_avg).round(5) # Returns blanked averages
            end
        end
        result
    end
  
  #-------------Plate ReaderCalibration------------------------------------------------------------#
    # Finds the first 
    def check_cal_plate_date()
        
        create_a_new_cal_plt = false
        calibration_plate = nil # if the plate is less than a month old use the cal plate
        
        # Look through flat bottom plates and see which one has flourescein inside
        flour_samp = Sample.find_by_name("Fluorescein Sodium Salt" )
        test_plts = find(:item,{object_type: { name: "96 Well Flat Bottom (black)" }} ).select {|i| i.location != 'deleted'}
        
        # Check to see if there is a calibration plate that is less than a month old
        test_plts.each do |item_id|
            mat = Collection.find(item_id).matrix.flatten.uniq
            if mat.include? flour_samp.id
                date_created = Item.find(item_id).get('date_created')
                
                present = todays_date()
                
                plus_month = [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
                plus_month[0] = plus_month[0] + 1
                
                date_created = [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
                
                today = [present[0..1], present[2..3], present[4..7]].map {|i| i.to_i}
                
                # log_info 'CALIBRATION PLATE AGE','date_created', date_created, 'plus_month', plus_month, 'todays_date', today
                
                if date_created[0] == plus_month[0] # Checking month
                    if plus_month[1] >= date_created[1] # Checking day
                        create_a_new_cal_plt = true
                        Item.find(item_id).mark_as_deleted
                    else
                        calibration_plate = item_id
                    end
                else
                    calibration_plate = item_id
                end
            end
        end
        return create_a_new_cal_plt, calibration_plate
    end


    
    
    # Creates a calibration plate for the plate reader with a Fluorescein dye and an optical density reagent
    #
    # @params flour [string] 
    # @params ludox [string]
    # @params collection [collection obj] container of plate reader cal solutions
    def create_cal_plate(cal_coll)
        flour_samp = Sample.find_by_name("Fluorescein Sodium Salt" )
        ludox_samp = Sample.find_by_name("LUDOX Stock")
        
        # Items and materials required for calibration plate
        flour_item = find(:item, { sample: { name: flour_samp.name }, object_type: { name: "1mM Fluorescein Stock" } } ).first
        ludox_item = find(:item, { sample: { name: ludox_samp.name }, object_type: { name: "1X LUDOX Aliquot" } } ).first
        cal_items = [flour_item, ludox_item]
        
        take cal_items, interactive: true
        
        h2o_type = "Nuclease-free water" # Change in Production Aq to Mol grade H2O
        h2o_samp = Sample.find_by_name(h2o_type) 
        cal_plt_mats = {'1X PBS'=>'Bench', 'Mol. Grade H2O'=>'Media Bay', '96 Well Flat Bottom (black)'=>'Bench'}
        
        show do
            title "Creating a New Calibration Plate"
            separator
            note "<b>Gather the following:</b>"
            cal_plt_mats.each {|mat, loc| check "#{mat} at #{loc}"}
        end
        
        show do
            title "Creating a New Calibration Plate"
            separator
            note "Vortex 1mM Fluorescein Stock and make sure there are no precipitates."
            check "In a fresh 1.5mL Eppendorf tube, dilute 50µl of 1mM Fluorescein Stock into 950µl of 1X PBS - Final Concentration [50µM]"
            note "Make sure to vortex."
        end
        
        dims = cal_coll.dimensions
        rows = dims[0]
        cols = dims[1]
        new_coll_mat = Array.new(rows) { Array.new(cols) { -1 } }
        rows.times do |r|
           cols.times do |c|
                if r < 4
                   new_coll_mat[r][c] = flour_samp.id 
                elsif r == 4
                   new_coll_mat[r][c] = ludox_samp.id
                elsif r == 5
                    new_coll_mat[r][c] = h2o_samp.id
                end
            end
        end
        cal_plate = cal_coll
        cal_plate.matrix = new_coll_mat
        cal_plate.save
        
        # selects wells that have flourescin sample id, then selects for the one's that are not in the first column of the collection is an array of [r,c]
        pbs_wells = cal_plate.select {|well| well == flour_samp.id}.select {|r, c| c != 0}
        
        # direct tech to fill new calibration plate
        show do
            title "Creating a New Calibration Plate"
            separator
            note "You will need <b>#{(pbs_wells.length * 0.1) + 0.1}mL</b> of 1X PBS for the next step."
            note "Follow the table below to dispense 1X PBS in the appropriate wells:"
            table highlight_rc(cal_plate, pbs_wells) {|r,c| "100µl"}
        end
        
        flour_serial_image = "Actions/Yeast_Gates/plateReaderImages/flour_serial_dilution.png"
        show do
            title "Serial Dilution of Flourescein"
            separator
            note "From the 50µM Fluorescein solution, dispense <b>200µl</b> in wells <b>A1, B1, C1, D1</b>"
            note "Following the image below, transfer <b>100µl</b> of 50µM Fluorescein solution in Column 1 to Column 2"
            note "Resuspend by pipetting up and down 3X"
            note "Repeat until column 11 and discard the remaining <b>100µl</b>."
            image flour_serial_image
        end
        
        # selects wells of a collection that have the ludox sample id, collects them as an array of [r, c]
        ludox_wells = cal_plate.select {|well| well == ludox_samp.id}
        
        show do
            title "Creating a New Calibration Plate"
            separator
            note "Follow the table below to dispense #{ludox_samp.name} into the appropriate wells."
            table highlight_rc(cal_plate, ludox_wells) {|r,c| ludox_vol(r, c)}
        end
        
        # selects wells of a collection that have the MG H2O sample id, collects them as an array of [r, c]
        h2o_wells = cal_plate.select {|well| well == h2o_samp.id}
        
        show do
            title "Creating a New Calibration Plate"
            separator
            note "Follow the table below to dispense #{h2o_type} into the appropriate wells."
            table highlight_rc(cal_plate, h2o_wells) {|r,c| ludox_vol(r, c)}
        end
        # Assocaite todays_date with item
        Item.find(cal_plate.id).associate('date_created', todays_date)
        release cal_items, interactive: true
        return cal_plate
    end
    
    def ludox_vol(row, col)
        if col < 4
            return "100µl"
        elsif col.between?(4, 7)
            return "200µl"
        else col.between?(7, 11)
            return "300µl"
        end
    end
    
    # This function directs tech to measure calibration plate on plate reader and export data; it also associates data from plate reader
    #
    # @params cal_plates [Array] an array of item objects
    #
    def measure_cal_plate(cal_plate)
        # measure on plate reader 
        set_up_plate_reader(cal_plate, CAL_TEMPLATE_FILENAME)
        
        # Export a file for each measurement
        CAL_MEASUREMENTS.each do |method|
            
            timepoint = nil # Is nil since it is not being measured along with this experiment
            filename = export_data(cal_plate, timepoint, method=method)
            
            # Show block upload button and retrieval of file uploaded
            up_show, up_sym = upload_show(filename)
            if (up_show[up_sym].nil?)
                show {warning "No upload found for calibration measurement. Try again!!!"}
                up_show, up_sym = upload_show(filename)
            else
                upload = find_upload_from_show(up_show, up_sym)
                key = "#{todays_date}_#{method}"
                
                # Associates upload to calibration plate and plan
                associate_to_plans(key, upload)
                associate_to_item(cal_plate, key, upload)
                # Associates data hash of measurements to item/collection - extract info from plate reader upload and associate with item
                associate_PlateReader_Data(upload, cal_plate, method, timepoint)
            end
        end
        cal_plate.location = '4°C Fridge'
        # cal_plate.mark_as_deleted
    end
#-------------------------------------------------PlateReaderControl-----------------------------------------------------#
  
  
  
  
  
end #module

library: {name: HighThroughput_Lib, category: YG_Harmonization}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu

# This library contains functions that aid in yeast high throughput screening.
# Ie: Calculations, formatting collections, etc...


needs "Standard Libs/AssociationManagement"
needs "Standard Libs/MatrixTools"

module HighThroughput_Lib
    include AssociationManagement, MatrixTools
    include PartProvenance
    
    # Finds where an alpha_coordinate is in a 96 Well plate
    #
    # @params alpha_coord [array or string] can be a single alpha_coordinate or a list of alpha_coordinate strings ie: 'A1' or ['A1','H7']
    # @return rc_list [Array] a list of [r,c] coordinates that describe where the alpha_coord(s) are in a 96 well matrix
    def find_rc_from_alpha_coord(alpha_coord)
        # look for where alpha coord is 2-D array coord
        coordinates_96 = ('a'..'h').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}} 
        rc_list = []
        if alpha_coord.instance_of? Array
            alpha_coord = alpha_coord.map {|a| a.downcase}
            alpha_coord.each {|a_coord|
                coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == a_coord}.each { |c_idx| rc_list.push([r_idx, c_idx]) } } 
            }
        else
            coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == alpha_coord.downcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } }
        end
        return rc_list
    end
    
    # Fills collection matrix with sample_ids based on how many biological replicates requested
    #
    # @params collection [collection] collection to be filled with biological replicates
    # @params items [array] an array of items that biological replicates will be taken from
    # @params bio_reps [integer] comes from protocol parameter altered to an integer 
    # @return collection [collection] filled collection with same dimensions
    def fill_collection_mat(collection, items, bio_reps)
      items.each do |item|
        colony_num = 0
        item_associations = AssociationMap.new(item)
        bio_reps.times do
          r, c, x = collection.add_one(item.sample_id)
          part = collection.part(r, c)
          part_associations = AssociationMap.new(part)

          # record historical relation between item and target collection part, using PartProvenance
          add_provenance({
                           from: item,
                           from_map: item_associations,
                           to: part,
                           to_map: part_associations,
                           additional_relation_data: { source_colony: colony_num, process: "resuspension" }
                         })
          part_associations.save
          colony_num += 1
        end
        item_associations.save
      end
      return collection
    end
    
    def alpha_coords_96_matrix()
        ('a'..'h').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}}
    end
    
    # Empty collection matrix
    #
    # @params collection [collection] collection you wish to empty
    # @return collection [collection] emptied collection with same dimensions
    def blank_collection_mat(collection)
        # empty out_coll
        rc_list = collection.get_non_empty
        rc_list.map {|r,c| collection.set(r,c,-1)}
        return collection
    end


end # Module

library: {name: PlateReaderMethods, category: YG_Harmonization}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu


needs "Yeast Display/YeastDisplayHelper"
needs "Tissue Culture Libs/CollectionDisplay"
needs 'Standard Libs/AssociationManagement'

needs "YG_Harmonization/Upload_PlateReader_Data"

# needs "YG_Harmonization/BiotekPlateReaderCalibration"

module PlateReaderMethods
    
    include YeastDisplayHelper
    include CollectionDisplay
    include Upload_PlateReader_Data
    # include BiotekPlateReaderCalibration
    include AssociationManagement
    
    SAVING_DIRECTORY = "_UWBIOFAB"
    # Experimental Default volume
    DEFAULT_VOLUME = { qty: 300, units: 'µl' }
    PLT_READER_LOC = "A10.530"
    PLT_READER_TYPE = 'Biotek Synergy HT'
    # Plate Reader Calibration
    CAL_TEMPLATE_FILENAME = "calibration_template_v1"
    CAL_MEASUREMENTS = ['cal_od', 'cal_gfp']

    # Directs technician to set up biotek plate reader software
    #
    # @params collection [collection obj] the collection that is being measured
    # @params template_filename [string] the name of the biotek protcol/measurement template
    def set_up_plate_reader(collection, template_filename)
        if template_filename.include? 'calibration_template'
            experiment_filename = "experiment_calibration_plate_#{todays_date}"
        else
            experiment_filename = "experiment_#{collection.id}_#{todays_date}"
        end
        # Open Biotek software
        # Set up plate reader workspace and taking measurements
        # select new exp and save
        img1 = "Actions/Yeast_Gates/plateReaderImages/open_biotek.PNG"
        img2 = "Actions/Yeast_Gates/plateReaderImages/begin_plate_reader.PNG"
        
        show do
            title "Setting Up Plate Reader Workspace"
            separator
            note "<b>The next steps should be done on the plate reader computer</b>."
            note "<b>1.</b> Open BioTek Gen5 software by clicking the icon shown below."
            image img1
            note "<b>2.</b> Under <b>'Create a New Item'</b> click <b>'Experiment'</b> "
            # select template
            note "<b>3.</b> From the list select: <b>#{template_filename}</b>"
            note "<b>4.</b> Click Read Plate icon shown below"
            image img2
            note "<b>5.</b> Click <b>'READ'</b> on the pop-up window."
            bullet "Name experiment file: <b>#{experiment_filename}</b>"
            bullet "<b>Save</b> it under the <b>#{SAVING_DIRECTORY}</b> folder."
            note "<b>6.</b> Load plate and click <b>'OK'</b>"
        end

        # show do
        #     title "Setting Up Plate Reader Workspace"
            
        #     note "Take 96 well plate to the plate reader computer, under cabinet <b>#{PLT_READER_LOC}</b>."
        #     note "Open BioTek Gen5 software by clicking the icon shown below."
        #     image img1
        #     note "Under 'Create a New Item' click <b>'Experiment'</b> "
        #     # select template
        #     note "From the list select <b>#{template_filename}</b>"
        #     note "Next, click Read Plate icon shown below and click <b>'READ'</b> on the pop-up window."
        #     image img2
        #     note "Name experiment file: <b>#{experiment_filename}</b>"
        #     note "Finally, save it under the <b>#{SAVING_DIRECTORY}</b> folder."
        #     note "Load plate and click <b>'OK'</b>"
        # end
    end
        
    
    def add_blanks(volume={}, media)
        volume = DEFAULT_VOLUME unless volume.present?
        
        show do
            title "Add Blanks to Plate"
            
            note "Prior to our measurement, we must add a blank to get a true OD reading."
            check "Fill the last three wells of the 96 Well plate <b>H10, H11, H12</b> with #{qty_display(volume)} of <b>#{media}</b> liquid media."
        end
    end
    
    def load_plate
        show do
            title "Load Plate Reader"
            
            note "Load plate on to the plate reader and click <b>'OK'</b>"
        end
    end
    
    # Exports data from plate reader (BioTek Gen 5)
    #
    # @params collection [collection obj] collection that is being measured
    # @params timepoint [integer] what hour into the experiment is this data being collected
    # @params method [string] what is being measured on the plate reader can also be gfp
    # @return filename [string] filename generated with information for downstream processing
    def export_data(collection, timepoint, method='od')
        if method.include? 'cal'
            filename = "jid_#{jid}_item_#{collection.id}_#{todays_date}_#{method}"
        else
            filename = "jid_#{jid}_item_#{collection.id}_#{timepoint}hr_#{todays_date}_#{method}"
        end
        
        img1 = "Actions/Yeast_Gates/plateReaderImages/exporting_data_new.GIF"
        img2 = "Actions/Yeast_Gates/plateReaderImages/excel_export_button_new.png"
        img3 = "Actions/Yeast_Gates/plateReaderImages/saving_export_csv_new.png"
        
        case method
        when 'od'
            dtype = 'Blank Read 1:600'
            desc = 'Optical Density'
        when 'gfp'
            dtype = 'Blank Read 2:485/20,516/20'
            desc = 'Fluorescence'
        when 'cal_od'
            dtype = 'Read 1:600'
            desc = 'Calibration Optical Density'
        when 'cal_gfp'
            dtype = 'Read 2:485/20,516/20'
            desc = 'Calibration Fluorescence'
        else
            dtype = ''
        end
        
        # Exporting single file (csv)
        show do
            title "Export #{desc} Measurements from Plate Reader"
            warning "Make sure that no other Excel sheets are open before exporting!"
            separator
            image img1
            bullet "Select the <b>'Statistics'</b> tab"
            bullet "Select Data: <b>#{dtype}</b>"
            separator
            note "Next, click the Excel sheet export button. <b>The sheet will appear on the menu bar below</b>."
            image img2
            warning "Make sure to save file as a .CSV file!"
            note "Go to sheet and <b>'Save as'</b> ==> <b>#{filename}</b> under the <b>#{SAVING_DIRECTORY}</b> folder."
            image img3
        end

        # show do
        #     title "Export #{desc} Measurements from Plate Reader"
            
        #     warning "Make sure that no other Excel sheets are open before exporting!"
        #     separator
        #     note "After measurements have been taken, be sure to select the <b>'Statistics'</b> tab"
        #     note "Select Data: <b>#{dtype}</b>"
        #     image img1
        #     note "Next, click the Excel sheet export button. The sheet will appear on the menu bar below."
        #     image img2
        #     note "Go to sheet and 'Save as' <b>#{filename}</b> under the <b>#{SAVING_DIRECTORY}</b> folder."
        #     warning "Make sure to save file as a .CSV file!"
        #     image img3
        # end
        
        return filename
    end
    
    def todays_date
        DateTime.now.strftime("%m%d%Y")
    end
    
    # Give an introduction to the sync by OD protocol
    #
    # @param wavelength [integer] the type of light measured, 0 to 900
    def intro_sync_OD(wavelength)
        show do
            title "Sychronization of Cultures by OD"
            
            note "In this protocol you will be measuring the cell concentration of cultures by Optical Density."
            note "Then we will normalize all cultures to a similar cellular concentration to begin our growth experiment."
            note "This allows researchers to observe discrepencies in growth rates of different strains and allows us to compare conditions."
            note "<b>1.</b> Setup Plate Reader (Biotek) & measure OD#{wavelength}."
            note "<b>2.</b> Take a calculated volume from each well and dilute into a 96 Deep Well Plate."
        end
    end
    
    # Associates the actual ODs calculated from the well OD and the ave culture volume diluted into the final vol
    #
    # @params out_coll [collection obj] output collection that the od_mat will be associated to 
    # @params od_mat [2-D Array] matrix containing ODs of the output collection
    def associate_true_ods_item(out_coll,od_mat)
        timepoint = 0 # timepoint now at t = 0 since we have diluted our cultures to the necessary starting ODs
        k = 'optical_density'
        method = 'od'
        od_hsh = Hash.new(0)
        od_hsh["#{timepoint}_hr_#{method}"] = od_mat
        Item.find(out_coll.id).associate(k, od_hsh)
    end
    # # This function directs tech to pre-fill deep well plate with required media
    # #
    # # @params out_coll [collection obj] the output collection object
    # # @params type_of_media [string] describes the type of media to be used in the experiment
    # # @params media_vol_mat [2-D Array] is a matrix of the media volume per well in ul 
    # def aliquot_media(out_coll, media_vol_mat, media)
    #     # Direct tech to fill output plate with media
    #     tot_media_vol = 0
    #     media_vol_mat.flatten.each {|vol| tot_media_vol += vol}
        
    #     # Where controls are to be placed in the experimental plate
    #     gfp_input_cult_coord = 'H9'
    #     wt_no_stain_coord = 'H7'
    #     wt_stain_coord = 'H8'
        
    #     rc_list = out_coll.get_non_empty
    #     rc_list.push(find_rc_from_alpha_coord(alpha_coord=gfp_input_cult_coord).first)
    #     rc_list.push(find_rc_from_alpha_coord(alpha_coord=wt_no_stain_coord).first)
    #     rc_list.push(find_rc_from_alpha_coord(alpha_coord=wt_stain_coord).first)
    #     log_info 'rc_list', rc_list
    #     show do
    #         title "Filling New 96 Deep Well Plate #{out_coll}"
            
    #         note "For this step you will need:"
    #         check "96 Well Deep U-bottom Plate and label with <b>#{out_coll.id}</b>"
    #         check "Multichannel Reservoir"
    #         check "Breathable AeraSeal Plate Cover"
    #         check "<b>#{((tot_media_vol/1000) + 1).round(1)} mLs</b> of <b>#{media}</b> liquid growth media."
    #     end
    #     show do
    #         title "Filling 96 Deep Well Plate #{out_coll}"
    #         note "Follow the table bellow to aliquot the appropriate amount of <b>#{media}</b> media to the respective well:"
    #         table highlight_rc(out_coll, rc_list) { |r, c| "#{(media_vol_mat[r][c]).round(1)} µl" }
    #     end
    # end
    
# -------------------------------------------------PlateReaderControl------------------------------------------------------------------#
    # def calibration_plate_chk()
    #     # is plate made already?
    #     check_cal_plate = show do
    #         title "Calibrating the #{PLT_READER_TYPE} Plate Reader"
    #         separator
    #         select [ "Yes", "No"], var: "cal_plate", label: "Is there a calibration plate that is less than 2 weeks old? If not, select 'No' and proceed to the next step."
    #         # note "If yes, take the calibration plate and place on the plate shaker in the 30°C incubator for 5 mins."
    #     end
    #     return (check_cal_plate[:cal_plate] == "No" ? false : true)
    # end
    
    # # Creates a calibration plate for the plate reader with a flourescence dye and a optical density reagent
    # #
    # # @params flour [string] 
    # # @params ludox [string]
    # # @params collection [collection obj] container of plate reader cal solutions
    # def create_cal_plate(cal_coll)
    #     flour_samp = Sample.find_by_name("Fluorescein Sodium Salt" )
    #     ludox_samp = Sample.find_by_name("LUDOX Stock")
        
    #     # Items and materials required for calibration plate
    #     flour_item = find(:item, { sample: { name: flour_samp.name }, object_type: { name: "1mM Fluorescein Stock" } } ).first
    #     ludox_item = find(:item, { sample: { name: ludox_samp.name }, object_type: { name: "1X LUDOX Aliquot" } } ).first
    #     cal_items = [flour_item, ludox_item]
    #     take cal_items, interactive: true
    #     h2o_type = "Nuclease-free water" # Change in Production Aq to Mol grade H2O
    #     h2o_samp = Sample.find_by_name(h2o_type) 
    #     cal_plt_mats = {'1X PBS'=>'Bench', 'Mol. Grade H2O'=>'Media Bay', '96 Well Flat Bottom (black)'=>'Bench'}
        
    #     show do
    #         title "Creating a New Calibration Plate"
    #         separator
    #         note "<b>Gather the following:</b>"
    #         cal_plt_mats.each {|mat, loc| check "#{mat} at #{loc}"}
    #     end
        
    #     show do
    #         title "Creating a New Calibration Plate"
    #         separator
    #         note "Vortex 1mM Fluorescein Stock and make sure there are no precipitates."
    #         check "In a fresh 1.5mL Eppendorf tube, dilute 50µl of 1mM Fluorescein Stock into 950µl of 1X PBS - Final Concentration [50µM]"
    #         note "Make sure to vortex."
    #     end
        
    #     dims = cal_coll.dimensions
    #     # log_info 'dims', dims
    #     rows = dims[0]
    #     cols = dims[1]
    #     new_coll_mat = Array.new(rows) { Array.new(cols) { -1 } }
    #     rows.times do |r|
    #       cols.times do |c|
    #             if r < 4
    #               new_coll_mat[r][c] = flour_samp.id 
    #             elsif r == 4
    #               new_coll_mat[r][c] = ludox_samp.id
    #             elsif r == 5
    #                 new_coll_mat[r][c] = h2o_samp.id
    #             end
    #         end
    #     end
    #     cal_plate = cal_coll
    #     cal_plate.matrix = new_coll_mat
    #     cal_plate.save
    #     # log_info 'new_coll_mat', new_coll_mat
    #     # log_info 'cal_plate matrix', cal_plate.matrix
        
    #     pbs_wells = cal_plate.select {|well| well == flour_samp.id}.select {|r, c| c != 0}
        
    #     # direct tech to fill new calibration plate
    #     show do
    #         title "Creating a New Calibration Plate"
    #         separator
    #         note "You will need <b>#{(pbs_wells.length * 0.1) + 0.1}mL</b> of 1X PBS for the next step."
    #         note "Follow the table below to dispense 1X PBS in the appropriate wells:"
    #         table highlight_rc(cal_plate, pbs_wells) {|r,c| "100µl"}
    #     end
        
    #     flour_serial_image = "Actions/Yeast_Gates/plateReaderImages/flour_serial_dilution.png"
    #     show do
    #         title "Serial Dilution of Flourescein"
    #         separator
    #         note "From the 50µM Fluorescein solution, dispense <b>200µl</b> in wells <b>A1, B1, C1, D1</b>"
    #         note "Following the image below, transfer <b>100µl</b> of 50µM Fluorescein solution in Column 1 to Column 2"
    #         note "Resuspend by pipetting up and down 3X"
    #         note "Repeat until column 11 and discard the remaining <b>100µl</b>."
    #         image flour_serial_image
    #     end
        
    #     ludox_wells = cal_plate.select {|well| well == ludox_samp.id}
        
    #     show do
    #         title "Creating a New Calibration Plate"
    #         separator
    #         note "Follow the table below to dispense #{ludox_samp.name} into the appropriate wells."
    #         table highlight_rc(cal_plate, ludox_wells) {|r,c| ludox_vol(r, c)}
    #     end
        
    #     h2o_wells = cal_plate.select {|well| well == h2o_samp.id}
        
    #     show do
    #         title "Creating a New Calibration Plate"
    #         separator
    #         note "Follow the table below to dispense #{h2o_type} into the appropriate wells."
    #         table highlight_rc(cal_plate, h2o_wells) {|r,c| ludox_vol(r, c)}
    #     end
    #     # Assocaite todays_date with item
    #     Item.find(cal_plate.id).associate('date_created', todays_date)
    #     release cal_items, interactive: true
    #     return cal_plate
    # end
    
    # def ludox_vol(row, col)
    #     if col < 4
    #         return "100µl"
    #     elsif col.between?(4, 7)
    #         return "200µl"
    #     else col.between?(7, 11)
    #         return "300µl"
    #     end
    # end
    
    # # This function directs tech to measure calibration plate on plate reader and export data; it also associates data from plate reader
    # #
    # # @params cal_plates [Array] an array of item objects
    # #
    # def measure_cal_plate(cal_plates)
    #     cal_plate = cal_plates.first
    #     # measure on plate reader 
    #     set_up_plate_reader(cal_plate, CAL_TEMPLATE_FILENAME)
        
    #     # Export a file for each measurement - Can the plate Reader export in xml?
    #     CAL_MEASUREMENTS.each do |method|
            
    #         timepoint = nil # Is nil since it is not being measured along with this experiment
    #         filename = export_data(cal_plate, timepoint, method=method)
            
    #         # Show block upload button and retrieval of file uploaded
    #         up_show, up_sym = upload_show(filename)
    #         if (up_show[up_sym].nil?)
    #             show {warning "No upload found for calibration measurement. Try again!!!"}
    #             up_show, up_sym = upload_show(filename)
    #         else
    #             upload = find_upload_from_show(up_show, up_sym)
    #             key = "#{todays_date}_#{method}"
    #             # Need to associate data to all plans that are batched in job
    #             associate_to_plan(upload, key)
                
    #             # Associates upload to calibration plate and plan
    #             cal_plates.each do |cal_plate|
    #                 associate_to_item(cal_plate, key, upload)
    #                 # Associates data hash of measurements to item/collection - extract info from plate reader upload and associate with item
    #                 associate_PlateReader_Data(upload, cal_plate, method, timepoint)
    #             end
    #         end
    #     end
    #     cal_plates.shift.location = '4°C Fridge'
    #     cal_plates.each {|plt| plt.mark_as_deleted}
    # end
#-------------------------------------------------PlateReaderControl------------------------------------------------------------------#

end # module

library: {name: SynchronizationLib, category: YG_Harmonization}
code_source:
module SynchronizationLib
    
    FINAL_OD = [0.0003, 0.00015, 0.000075]
    FINAL_OUTPUT_VOL = 1#mL
    ROWS = ('A'..'H').to_a
    COLS = (1..12).to_a
    
    
    def sync_experimental_cultures(in_collection, out_collection, input_plate_ods, bio_reps)
        # Coordinates of wells in input collection that have experimental cultures
        # input_cult_coords = in_collection.get_non_empty.select {|r,c| r != 7 && !in_collection.matrix[r][c].nil?}
        input_cult_coords = in_collection.get_non_empty.select {|r,c| r != 7}
        # log_info 'input_cult_coords', input_cult_coords, in_collection.get_non_empty
        
        # Create an array of ods from non empty wells
        input_plate_ods = input_cult_coords.map {|r, c| input_plate_ods[r][c]}
        # log_info 'input_plate_ods', input_plate_ods
        
        # Calculates the average OD by slices of 6 wells - PlateReaderMethods
        average_ods = average_ods(input_cult_coords, input_plate_ods, bio_reps) # bio_rep well average ODs of plate
        # log_info 'average ods', average_ods
        
        # Calculates volumes from culture and media to obtain necessary final OD 
        ave_cult_vols_ul, ave_media_vols_ul = ave_cult_media_vol(average_ods) # 6 well average vols
        # log_info 'ave_cult_vols_ul', ave_cult_vols_ul
        # log_info 'ave_media_vols_ul', ave_media_vols_ul
        
        # Creates a matrix based on the length of row averages and number of wells measured - Used to display volumes for tech
        cult_vol_mat = matrix_mapping(input_plate_ods, ave_cult_vols_ul, bio_reps)
        media_vol_mat = matrix_mapping(input_plate_ods, ave_media_vols_ul, bio_reps)
        # log_info 'cult_vol_mat', cult_vol_mat
        # log_info 'media_vol_mat', media_vol_mat
        
        # 4. Calc true ODs based on cult_vol_ul and original ODs
        # Calculates the actual OD of each well based on the input well/cult OD and the average cult vol used for that row
        actual_ods_mat = actual_ods(input_plate_ods, ave_cult_vols_ul, bio_reps)
        # log_info 'actual_ods_mat', actual_ods_mat
            
        # 5. Associate new actual ODs to output collection - t = 0
        associate_true_ods_item(out_collection, actual_ods_mat)
        
        out_collection.matrix = out_coll_samp_id_mat(in_collection)
        
        
        return input_cult_coords, cult_vol_mat, media_vol_mat
    end

    # This function directs tech to pre-fill deep well plate with required media
    #
    # @params out_coll [collection obj] the output collection object
    # @params type_of_media [string] describes the type of media to be used in the experiment
    # @params media_vol_mat [2-D Array] is a matrix of the media volume per well in ul 
    def aliquot_media(out_coll, media_vol_mat, media)
        # Direct tech to fill output plate with media
        tot_media_vol = 0
        # show do
        #     title 'media vol mat - aliquot_media()'
        #     note "#{media_vol_mat}"
        # end
        media_vol_mat.flatten.select {|vol| vol != -1 }.each {|vol|
            tot_media_vol += vol if vol
        }
        
        rc_list = out_coll.get_non_empty.select {|r,c| !out_coll.matrix[r][c].nil? }
        log_info 'rc_list sync lib', rc_list
        show do
            title "Filling New 96 Deep Well Plate #{out_coll}"
            separator
            note "For this step you will need:"
            check "96 Well Deep U-bottom Plate and label with <b>#{out_coll.id}</b>"
            check "Multichannel Reservoir"
            check "Breathable AeraSeal Plate Cover"
            check "<b>#{((tot_media_vol/1000) + 1).round(1)}mLs</b> of <b>#{media}</b> liquid growth media."
        end
        show do
            title "Filling 96 Deep Well Plate #{out_coll}"
            separator
            note "Follow the table bellow to aliquot the appropriate amount of <b>#{media}</b> media to the respective well:"
            table highlight_alpha_rc(out_coll, rc_list) { |r, c| "#{(media_vol_mat[r][c]).round(1) if media_vol_mat[r][c]} µl" }
        end
    end
    
    # Directs tech and inoculates output collection with cultures from the input collection
    #
    # @param in_coll [collection obj] the input collection
    # @param out_coll [collection obj] the output collection
    # @param input_cult_coords [Array] one dimensional array that contains the coordinates of the input collection cultures
    # @param cult_vol_mat [2-D Array] matrix that contains the volume required to inoculate the output collection
    def inoculate_plate(in_coll, out_coll, input_cult_coords, cult_vol_mat)
        # Creates a matrix with row column coordinates from the input collection - Will be used to direct tech which input wells to dilute in the output collection
        in_out_map = input_cult_coords.map {|r, c| (ROWS[r] + COLS[c].to_s)}.select {|coord| !coord.include? "H"} # [0,0] --> "A1"
        in_out_map_mat = FINAL_OD.map {|f_od| in_out_map }.flatten.each_slice(12).to_a
        in_out_map_mat.each {|arr| 
            if arr.length != 12
                (12-arr.length).times do
                    arr.push(-1)
                end
            end
        }
        if in_out_map_mat.length != 8
            (8 - in_out_map_mat.length).times do
                in_out_map_mat.push(Array.new(12) {-1})
            end
        end
        
        # Adding alpha numeric coordinates for controls 
        input_control_cults_coords = []
        input_control_cults_coords.push(find_input_wt_cult_coord(collection=in_coll).map {|r, c| (ROWS[r] + COLS[c].to_s)}.first) # Creating 2 WT control cultures
        input_control_cults_coords.push(find_input_wt_cult_coord(collection=in_coll).map {|r, c| (ROWS[r] + COLS[c].to_s)}.first)
        gfp_control_coord = 'H9'
        input_control_cults_coords.push(gfp_control_coord)
        # input_control_cults_coords.each {|control_coord| in_out_map_mat[in_out_map_mat.length - 1].push(control_coord)}
        # in_out_map_mat.push(input_control_cults_coords)
        in_out_map_mat[7][6] = input_control_cults_coords[0]
        in_out_map_mat[7][7] = input_control_cults_coords[1]
        in_out_map_mat[7][8] = input_control_cults_coords[2]
        display_coords = out_coll.get_non_empty.select {|r,c| !out_coll.matrix[r][c].nil? }.each_slice(in_out_map.select{|coord| !coord.include? "H"}.length).to_a
        
        # Diluting cultures 1:10 before transfering
        show do
            title "Dilute Cultures in Item #{in_coll}"
            separator
            check "Perform a 1:10 dilution on cultures"
            bullet "10ul of culture to 90ul of media"
        end
        if debug
            show do
                title "Debugging"
                note "out_coll_#{out_coll}"
                note "display_coords_#{display_coords}"
                note "in_out_map_mat_#{in_out_map_mat}"# ***
                note "cult_vol_mat_#{cult_vol_mat}"
            end
        end

        display_coords.each do |rc_list|
            show do
                title "Innoculating New 96 Deep Well Plate #{out_coll}"
                separator
                bullet "The coordinates correspond to wells from 96 Flat Bottom Plate <b>#{in_coll.id}</b>."
                note "Follow the table below to inoculate the filled 96 Deep Well Plate with the appropriate volume and culture:"
                table highlight_alpha_rc(out_coll, rc_list) {|r, c| "#{in_out_map_mat[r][c] if in_out_map_mat[r][c]}\n#{cult_vol_mat[r][c].round(1) if cult_vol_mat[r][c]}µl"}
            end
        end
        
        group_by_collection = operations.map.group_by {|op| op.input("96 Well Flat Bottom").collection}
        growth_temperature = group_by_collection[in_coll].first.input("Growth Temperature (°C)").val
        Item.find(out_coll.id).associate('growth_temperature', growth_temperature)
        # Move output plate (96DW Plate to incubator)
        out_coll.location = "#{growth_temperature}C Incubator Shaker @ 800 rpm"
        out_coll.save
    ### IF USING THE SAME PLATE FOR MULTIPLE SYNCS THEN WHEN SHOULD WE DELETE INCOLLECTION
        # in_coll.mark_as_deleted
        release([out_coll], interactive: true)
        
    end    

    
    
    # Based on the number of diltuions (Final ODs) create a new matrix with sample ids in the correct organization 
    #
    # @params in_coll [collection] the input collection in order to obtain the sample id matrix
    # @return out_samp_id_mat [2-D Array] matrix containing new sample id matrix; spread out input collection sample ids
    def out_coll_samp_id_mat(in_coll)
        if debug
            in_coll = Collection.find(411551)
        end
        output_samp_ids = []
        (FINAL_OD.length).times do 
            in_coll.matrix.each_with_index do |row, r_idx|
                row.each_with_index do |well, c_idx|
                    if !well.nil?
                        if r_idx != 7
                            well > -1 ? output_samp_ids.push(well) : -1
                        end
                    end
                end
            end
        end
        # Filling in blank/empty wells with -1
        out_samp_id_mat = output_samp_ids.each_slice(12).to_a
        out_samp_id_mat.each {|row|
            if row.length != 12
                (12 - row.length).times do
                    row.push(-1)
                end
            end
        }
        if out_samp_id_mat.length != 8
            (8 - out_samp_id_mat.length).times do
                out_samp_id_mat.push(Array.new(12) {-1})
            end
        end
        return out_samp_id_mat
    end



    # Finds volume needed from input culture and the necessary media volume for the output culture/well
    #
    # @params row_od_aves [array] array of the average ODs by row
    # @return cult_vols_ul [array] array of culture volumes found based on the average row ods
    # @return media_vols_ul [array] array of media minus the culture volume
    def ave_cult_media_vol(row_od_aves)
        cult_vols_ul = []
        media_vols_ul = []
        FINAL_OD.each do |f_od|
            c_vol = row_od_aves.map {|ave_od| ave_od == 0.0 ? 0.0 : ((f_od * FINAL_OUTPUT_VOL)/ave_od) * 10000.0} # 10,000 includes the 1:10 dilution
            m_vol = c_vol.map {|vol| vol == 0.0 ? 0.0 : (1000.0 - vol).round()}
            cult_vols_ul.push(c_vol)
            media_vols_ul.push(m_vol)
        end
        return cult_vols_ul, media_vols_ul
    end
    
    # Averages 2-D array across rows. Turns 2-D array into 1-D array of averages
    #
    # @param input_plate_ods [2-D Array] matrix containing the ODs of a 96 well plate measured on the BioTek Plate Reader
    # @param 
    # @return row_od_aves [Array] array of averages across rows of the input matrix 
    def average_ods(input_cult_coords, input_plate_ods, bio_reps)
        # slice = 6
        average_ods = []
        input_plate_ods.each_slice(bio_reps).to_a.map do |arr| 
            tot_od = 0.0
            arr.each {|od| tot_od += od}
            average_ods.push(tot_od/arr.length)
        end
        return average_ods
    end
    
    # Creates a matrix based on the amount of row averages and number of wells measured
    #
    # @params input_plate_ods [Array] one dimensional array of non empty wells from input collection
    # @params ave_arr [2-D Array] matrix created from ave vol calculated based on the ave od of each slice(6 wells)
    # @return matrix [2-D Array] matrix with all volumes needed for display onto a 8x12 matrix
    def matrix_mapping(input_plate_ods, ave_arr,bio_reps)
        matrix = []
        input_slices = input_plate_ods.each_slice(bio_reps).to_a
        ave_arr.each do |arr|
            input_slices.each_with_index do |slice, i|
                slice.each {|well| matrix.push(arr[i])}
            end
        end
        matrix = matrix.flatten
        if matrix.length != 96
            (96 - matrix.length).times do
                matrix.push(-1)
            end
        end
        return matrix.each_slice(12).to_a
    end
    
    # Calculates the actual OD of each well based on the input well/cult OD and the average cult vol for that row
    #
    # @params input_plate_ods [array] 1 dim array with all the ODs that were measured from the input collection
    # @params cult_vols_ul [2-D Array] a matrix of average culture volume needed to reach requested final OD
    # @return actual_ods_mat [2-D Array] a matrix of the calculated actual OD in slices of 12 to fit the 96 well format
    def actual_ods(input_plate_ods, cult_vols_ul, bio_reps)
        actual_ods = []
        well_ods_slices = input_plate_ods.each_slice(bio_reps).to_a
        cult_vols_ul.each_with_index do |ave_cult_vol, i|
            ave_cult_vol.each_with_index do |c_vol, ii|
                well_ods_slices[ii].each {|w_od| actual_ods.push(((w_od * (c_vol/1000.0))/FINAL_OUTPUT_VOL).round(6))}
            end
        end
        actual_ods_mat = actual_ods.each_slice(12).to_a
        return actual_ods_mat
    end
    
    # Averages 2-D array across rows. Turns 2-D array into 1-D array of averages
    #
    # @param input_plate_ods [2-D Array] matrix containing the ODs of a 96 well plate measured on the BioTek Plate Reader
    # @param 
    # @return row_od_aves [Array] array of averages across rows of the input matrix 
    def average_ods(input_cult_coords, input_plate_ods, bio_reps)
        # slice = 6
        average_ods = []
        input_plate_ods.each_slice(bio_reps).to_a.map do |arr| 
            tot_od = 0.0
            arr.each {|od| tot_od += od}
            average_ods.push(tot_od/arr.length)
        end
        return average_ods
    end
    
    # given a r,c from one of the first 30 wells and an od level, figures out the location
    # of the replicate on the output plate
    def get_rc_out_from_rc_in_and_od_no(r,c,od, num_input_samples)
        absolute_rc = r * 12 + c
        if absolute_rc > 30
            raise "rc in is not one of the first 30 samples"
        end
        
        adjusted_absolute = absolute_rc + od * num_input_samples
        
        r_out = adjusted_absolute / 12
        c_out = adjusted_absolute % 12
        return r_out, c_out
    end

    def get_bio_reps_from_outgrowth_plate(collection)
        if debug
            return 3
        else
            return Item.find(collection.id).get('bio_reps')
        end
    end


end #Module

library: {name: Upload_PlateReader_Data, category: YG_Harmonization}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu

# This library contains functions that aid in uploading data that comes from yeast high throughput screening measurements
# Ie: Plate reader measurements
needs 'Standard Libs/MatrixTools'
needs 'Standard Libs/AssociationManagement'
module Upload_PlateReader_Data
    require 'csv'
    require 'open-uri'
    include MatrixTools
    include AssociationManagement
    
    # Takes in a csv upload file in a tabular format, extracts the information on it
    # into a datamatrix object which is returned.
    # Specificly tuned to the output file of the biotek plate reader.
    #
    # @param upload [Upload]  the object which can be resolved to calibration csv
    # @return [WellMatrix]  a WellMatrix holding the measurement for each well
    def extract_measurement_matrix_from_csv(upload)
        url = upload.url
        table = []
        CSV.new(open(url)).each { |line| table.push(line) }
        dm = WellMatrix.create_empty(96, -1) if table.size > 25
        dm = WellMatrix.create_empty(24, -1) if table.size <= 25
        table.each_with_index do |row, idx|
          next if idx.zero?
          well_coord = row[2]
          next if well_coord.nil?
          measurement = row[3].to_f
          next if measurement.nil?
          dm.set(well_coord, measurement)
        end
        dm
    end
    
  # Returns the average OD measurement for different dilutions and well volumes.
  # The plotted result of this method can be fit to a curve
  # to be used for calibrating the plate reader. This is very specific to the
  # Eriberto's calibration of the biotek plate reader.
  #
  # @param upload [Upload]  the object whihc can be resolved to calibration csv
  # @return [Hash]  a hash containing averaged measurements for
  #  					every concentration and volume tested
    def get_calibration_data_hash(upload)
        method = upload.name
        dm = extract_measurement_matrix_from_csv(upload)
        result = {}
        data_by_conc = Hash.new { |h, key| h[key] = [0, 0] }

        if method.include? 'gfp'
            # show {note "#{method}"}
            starting_concentration = 50.0#uM
            # first 4 rows are serial dilutions
            for i in 0...4
              12.times do |j|
                # each column is a 2x dilution of the previous, starting at 50uM
                this_conc = starting_concentration / (2**j)
                data = data_by_conc[this_conc]
                data[0] += dm[i, j].to_f
                data[1] += 1
                data_by_conc[this_conc] = data
              end
            end
            # add serial dilution averages to result hash
            data_by_conc.each_key do |k,|
              data = data_by_conc[k]
              result[k] = data[0] / data[1]
            end
            return result
        elsif method.include? 'od'
            # row 5, 6 are lud dilutions and pure solution respectively
            for i in 4...6
                for j in 0...4
                    data_by_conc["100_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["100_#{i}"][1] += 1
                end
                for j in 4...8
                    data_by_conc["200_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["200_#{i}"][1] += 1
                end
                for j in 8...12
                    data_by_conc["300_#{i}"][0] += dm[i, j].to_f
                    data_by_conc["300_#{i}"][1] += 1
                end
            end
            # add lud averages to result hash
            for i in 1..3
              lud_avg = data_by_conc["#{i}00_4"][0] / data_by_conc["#{i}00_4"][1]
              sol_avg = data_by_conc["#{i}00_5"][0] / data_by_conc["#{i}00_5"][1]
              result["lud#{i}00"] = (lud_avg - sol_avg).round(5) # Returns blanked averages
            end
        end
        result
    end

    # Provides a upload button in a showblock in order to upload a single file
    #
    # @params upload_filename [string] can be the name of the file that you want tech to upload
    # @return up_show [hash] is the upload hash created in the upload show block
    # @return up_sym [symbol] is the symbol created in upload show block that will be used to access upload
    def upload_show(upload_filename)
        upload_var = "file"
        up_sym = upload_var.to_sym
        up_show = show do
            title "Upload Your Measurements"
            note "Select and Upload: #{upload_filename}"
            upload var: "#{upload_var}"
        end
        return up_show, up_sym
    end
    
    # Retrieves the upload object from upload show block
    #
    # @params up_show [hash] is the hash that is created in the upload show block
    # @params up_sym [symbol] is the symbol created in the upload show block and used to access file uploaded
    # @return upload [upload_object] is the file that was uploaded in the upload show block
    def find_upload_from_show(up_show, up_sym)
        # Makes a query to find the uploaded file by its default :id
        upload = up_show[up_sym].map {|up_hash| Upload.find(up_hash[:id])}.shift 
        return upload
    end
    
    # Associates an upload to an item - DEPRCIATED
    # #
    # # @params collection [collection obj] can be the collection that you wish to associate upload to
    # # @params upload [upload_obj] the file that you wish to associate to item
    # # @params key [string] the key to the association it will also appear as description when looking at item
    # def associate_to_item(collection, upload, key)
    #     Item.find(collection.id).associate key.to_sym, "item_#{collection.id}", upload
    # end
    # Associates an upload to an item
    #
    # @params in_obj [obj] can be the collection that you wish to associate upload to
    # @params upload [upload_obj] the file that you wish to associate to item
    # @params key [string] the key to the association it will also appear as description when looking at item
    def associate_to_item(in_obj, key, upload)
        item_assoc = AssociationMap.new(in_obj)
        item_assoc.put(key.to_sym, upload)
        item_assoc.save
    end

    
    # Associates an upload to the plan that it was uploaded in - Still needed for YG_Harmonization calibration associations
    #
    # @params upload [upload_obj] the file that you wish to associate to plan
    # @params key [string] the key to the association it will also appear as description when looking at item
    def associate_to_plan(upload, key)
        plan = operations.map {|op| op.plan}.first
        plan.associate key.to_sym, "plan_#{plan.id}", upload
    end    
    # Associates an upload to the plans that it was uploaded in
    #
    # @params data [obj] the thing that you wish to associate to plan
    # @params key [string] the key to the association it will also appear as description when looking at item
    def associate_to_plans(key, data) 
        # iterate over ops, find all unique plans, associate to each plan, ensure copying
        plans = operations.map { |op| op.plan }.uniq
        plans.each do |plan|
            plan_associations = AssociationMap.new(plan)
            plan_associations.put(key.to_sym, data)
            plan_associations.save
        end
    end    
    
    # Opens file using its url and stores it line by line in a matrix
    #
    # @params upload [upload_obj] the file that you wish to read from
    # @return matrix [2D-Array] is the array of arrays of the rows read from file, if csv
    def read_url(upload)
        url = upload.url
        matrix = []
        CSV.new(open(url)).each {|line| matrix.push(line)}
        # open(url).each {|line| matrix.push(line.split(',')}
        return matrix
    end

    
    # Takes csv matrix and formats data for OD measurements - Biotek Plate reader
    #
    # @params matrix [2D-Array] can be array of arrays containing od measurements 
    # @return hash [hash] is hash created from matrix parameter
    def matrix_to_hash(matrix)
        hash = Hash.new(0)
        cols = matrix.shift.select {|col| col != nil}
        rows = []
        data = []
        ods = matrix.map do |arr|
            rows.push(arr.shift) # first index is row letter
            arr.pop() # Strips off last index
            arr.map! {|str| str.to_f} # converts strings to float to include dilution factor
            data.push(arr)
            arr.map {|od| od} # Good place to include dilution factor
        end
        hash["cols"] = cols
        hash["rows"] = rows
        hash["data"] = data
        # hash["optical_density"] = ods
        return hash
    end

    
    # Reads uploaded file and associates data to a given item/collection
    #
    # @params upload [upload obj] upload (csv) that is going to be read and processed
    # @params collection [collection obj] collection that the data will be associated to
    # @params method [string] the type of measurement that was taken (od or gfp)
    # @params timepoint [integer] the number of hours that data was collected at
    def associate_PlateReader_Data(upload, collection, method, timepoint)
        up_name = upload.name.downcase
        up_ext = up_name.split('.')[1]
        if up_ext.downcase == 'csv'
            # If calibration measurement will be associated with item and plan
            collection_associations = AssociationMap.new(collection)
            if up_name.include? 'cal'
                key = method == 'cal_gfp' ? 'cal_fluorescence' : 'cal_optical_density'
                
                cal_hash = get_calibration_data_hash(upload) # from BiotekPlateReader Lib
                data_hash = Hash.new(0)
                if method == 'cal_gfp'
                    # Fluorescence std curve & r-sq value
                    slope, yint, x_arr, y_arr = gfp_standard_curve(cal_hash)
                    r_sq = r_squared_val(slope, yint, x_arr, y_arr)
                    trendline = "y = #{slope}x + #{yint}  (R^2 = #{r_sq})"
                    # Associating flour calibration data hash
                    
                    data_hash['uM_to_data'] = cal_hash
                    collection_associations.put(key, data_hash)
                    # ie: 'cal_fluorescence' : {'uM_to_data'=>{50=>2400,25=>1234...}}
                    collection_associations.put('Fluorescence Standard Curve', trendline)
                    associate_to_plans('Fluorescence_Standard_Curve', trendline)
                else
                    correction_val_hash = ludox_correction_factors(cal_hash)
                    data_hash['vol_to_correction_factor'] = correction_val_hash
                    collection_associations.put(key, data_hash) # ie: 'cal_od'=>{'vol_to_correction_factor'=>{"100"=>1.88,"200"=>0.955}}
                    associate_to_plans('vol_to_correction_factor', correction_val_hash)
                end
                
            else
                # matrix = read_url(upload)
                matrix = (extract_measurement_matrix_from_csv(upload)).to_a # Uses BiotekPlateReaderCalibration/PlateReaderMethods
                # hash = matrix_to_hash(matrix) # Upload_Data Lib - May change if I change data format
                log_info 'csv matrix', matrix
                # take hash and slice up to associate to input collections - that way matrix always gets formatted to the same dimensions as in_collection
                in_cols = collection.object_type.columns
                in_rows = collection.object_type.rows
                
                # 'data' - known beforehand, created in matrix_to_OD_hash(matrix)
                # slices = hash['data'].flatten.each_slice(in_cols).map {|slice| slice} # 2-D Array with similar dims as collection
                slices = matrix.flatten.each_slice(in_cols).map {|slice| slice} # 2-D Array with similar dims as collection
                log_info 'sliced up csv', slices
                
                #### left off here attempting to create hashes for GFP or optical density at differnet timepoints if necessary
                key = method == 'od' ? 'optical_density': 'gfp_fluorescence'
                data_hash = collection_associations.get(key)
                log_info slices.shift(in_rows)
                if data_hash.nil? 
                    data_hash = Hash.new(0)
                    data_hash["#{timepoint}_hr"] = slices.shift(in_rows)
                    collection_associations.put(key, data_hash)
                else
                    data_hash["#{timepoint}_hr"] = slices.shift(in_rows)
                    collection_associations.put(key, data_hash)
                end
            end
            collection_associations.save
        end
        # should produce ie: 'optical_density': {'16h_od'=>[[][][][]...[]]}
    end

    
    # For associating a matrix to an item
    #
    # Associatition skem: key:{ desc:[mat] }
    # @params item [object] item object that data will be associated to
    # @params key [string] key to the data hash associated to the item 
    # @params desc [string] describes the certain matrix data that it is pair with in the data hash
    # @params mat [2D-Array] is the matrix of data being associated
    def associate_mat_to_item(item, key, desc, mat)
        hash = Hash.new(0)
        data_hsh = hash[desc] = mat
        item.associate(key, data_hsh)
    end
        # This fuction uses a reference od600 measurement to calculate the correction factor for different vols (100ul, 200, 300)
    # 
    # @params hash [hash] is the hash of averaged blanked LUDOX samples at different volumes
    # 
    # @returns correction_val_hash [hash] is the hash containing the correction factor for the optical density (600nm) for this experiment
    def ludox_correction_factors(hash)
        ref_od600 = 0.0425 #Taken from iGEM protocol - is the ref val of another spectrophotometer
        # ref/corrected vals
        correction_val_hash = Hash.new(0)
        hash.each do |vol, ave|
            correction_val_hash[vol[3..6]] = (ref_od600/ave).round(4)
        end
        return correction_val_hash
    end
  
    # This function creates a standard curve from the flourocein calibration plate
    #
    # @params coordinates [hash or 2D-Array] can be a hash or [[x,y],..] where x is known concentration & y is measurement of flouroscence
    #
    # @returns slope [float] float representing the slope of the regressional line
    # @returns yint [float] float representing where the line intercepts the y-axis
    # @returns x_arr [Array] a 1D array for all x coords
    # @returns y_arr [Array] a 1D arrya for all y coords
    def gfp_standard_curve(coordinates)
        # Calculating Std Curve for GFP
        num_of_pts = 0
        a = 0
        x_sum = 0
        y_sum = 0
        x_sq_sum = 0
        x_arr = []
        y_arr = []
        coordinates.each do |x, y|
            if x < 25 # Above 25uM is out of linear range of our instrument
                a += (x * y)
                x_sum += x
                x_sq_sum += (x**2)
                y_sum += y
                x_arr.push(x)
                y_arr.push(y)
                num_of_pts += 1
            end
        end
        a *= num_of_pts
        b = x_sum * y_sum
        c = num_of_pts * x_sq_sum
        d = x_sum**2
        slope = (a - b)/(c - d)
        f = slope * (x_sum)
        yint = (y_sum - f)/num_of_pts
        # show{note "y = #{(slope).round(2)}x + #{(yint).round(2)}"}
        return (slope).round(3), (yint).round(3), x_arr, y_arr
    end
    
    # This function calculates how much deviation points are from a regressional line - R-squared Value 
    # The closer it is to 1 or -1 the less deviation theres is
    #
    # @params slope [float] float representing the slope of the regressional line
    # @params yint [float] float representing where the line intercepts the y-axis
    # @params x_arr [Array] a 1D array for all x coords
    # @params y_arr [Array] a 1D arrya for all y coords
    #
    # @returns rsq_val [float] float representing the R-squared Value
    def r_squared_val(slope, yint, x_arr, y_arr)
        y_mean = y_arr.sum/y_arr.length.to_f
        # Deviation of y coordinate from the y_mean
        y_mean_devs = y_arr.map {|y| (y - y_mean)**2}
        dist_mean = y_mean_devs.sum # the sq distance from the mean
        # Finding y-hat using regression line
        y_estimate_vals = x_arr.map {|x| (slope * x) + yint }
        # Deviation of y-hat values from the y_mean
        y_estimate_dev = y_estimate_vals.map {|y| (y - y_mean)**2}
        dist_regres = y_estimate_dev.sum # the sq distance from regress. line
        rsq_val = (dist_regres/dist_mean).round(4)
        return rsq_val
    end

end # Module

library: {name: YG_Controls, category: YG_Harmonization}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu
# Updated: 08/15/18
# This library is to help with creating additional controls to the YG_Harmonization workflow

needs 'Standard Libs/AssociationManagement'

module YG_Controls
    include AssociationManagement
    include PartProvenance
    
    def creating_neg_pos_wt_staining_control(in_collection, out_collection, output_cult_dest, cult_vol_mat, media_vol_mat, input_cult_coords, samp_id=22544) #Sync by OD
        if debug
            samp_id = 22544 # WT 22544 is not in Nursery 
        end
        # Finding where WT is on the input collection in order to copy cult and media vol for synchronization of WT controls
        input_wt_cult_coord = find_input_wt_cult_coord(collection=in_collection)
        # log_info 'input_wt_cult_coord creating control', input_wt_cult_coord
        
        # Found the coordinate in which wt is in now copy the media vol and the culture vol
        neg_pos_wt_cult_coord_destination = ['H7', 'H8'] # Where I want control cults to be in the output plate
        neg_pos_wt_cult_coord_destination = find_rc_from_alpha_coord(alpha_coord=neg_pos_wt_cult_coord_destination)
        neg_pos_stn_wt_cult_vol = input_wt_cult_coord.map {|r,c| cult_vol_mat[r][c]}.first
        neg_pos_stn_wt_media_vol = input_wt_cult_coord.map {|r,c| media_vol_mat[r][c]}.first
        neg_pos_wt_cult_coord_destination.each {|r,c|
            cult_vol_mat[r][c] = neg_pos_stn_wt_cult_vol
            media_vol_mat[r][c] = neg_pos_stn_wt_media_vol
            input_cult_coords.push([r, c])
            out_coll_matrix = out_collection.matrix 
            out_coll_matrix[r][c] = samp_id # sample_id Diploid WT
            out_collection.matrix = out_coll_matrix
            out_collection.save
        }
        
        return input_cult_coords, cult_vol_mat, media_vol_mat
    end
    
    
    def creating_pos_gfp_control(out_collection, input_plate_ods, final_output_vol, cult_vol_mat, media_vol_mat, input_cult_coords, samp_id=6390) # Sync by OD
        gfp_input_cult_coord = 'H9' # gfp culture is in the same place that it will be in the deep well experimental plate
        gfp_input_cult_coord_destination = find_rc_from_alpha_coord(alpha_coord=gfp_input_cult_coord)
        gfp_input_cult_vol, gfp_input_media_vol = sync_gfp_control(gfp_input_cult_coord=gfp_input_cult_coord, gfp_output_cult_coord=gfp_input_cult_coord, input_plate_ods, final_output_vol) #YG_Controls
        log_info 'gfp_input_cult_vol', gfp_input_cult_vol, 'gfp_input_media_vol',gfp_input_media_vol
        gfp_input_cult_coord_destination.each {|r,c|
            cult_vol_mat[r][c] = gfp_input_cult_vol
            media_vol_mat[r][c] = gfp_input_media_vol
            input_cult_coords.push([r, c])
            out_coll_matrix = out_collection.matrix 
            out_coll_matrix[r][c] = samp_id # sample_id NOR00 1.0
            out_collection.matrix = out_coll_matrix
            out_collection.save
        }
        return input_cult_coords, cult_vol_mat, media_vol_mat
    end
    
    # Will find where in a collection diploid WT is located and return [[r,c]]
    def find_input_wt_cult_coord(collection)
        wt_cult_coord = []
        collection.matrix.each_with_index.map {|row, r_idx|
            row.each_with_index.map {|col, c_idx|
                wt_sample_id = []
                if debug
                    wt_sample_id = [1, 30, 22544, 22801]
                else
                    wt_sample_id = [30, 22544, 22801]
                end
                
                # Once wt sample_id is found in the collection return [[r,c]]
                if wt_sample_id.include? col
                    wt_cult_coord.push([r_idx, c_idx])
                    break
                end
            }
        }
        return wt_cult_coord
    end

    
    # Will add a positive gfp colony (NOR00) to a desired well in a collection
    #
    # @params collection [collection obj] the collection to which the gfp control will be added to
    # @params well [string] the alpha numeric coordinate that the gfp colony will be added to
    # @returns need_to_create_new_control_plate[:make_new_plate] [boolean] will return true or false based on user input
    def adding_positive_gfp_control(collection, well='H9')
        strain_sample_id = 6390 # NOR_00 1.0
        obj_type = "Yeast Plate"
        # Find the plate created for the gfp positive control
        positive_gfp_control_plate = find(:item, { sample: { id: strain_sample_id }, object_type: { name: obj_type } } ).select {|item| 
            item.get('YG_Control') == 'positive_gfp'
        }.first # Key: YG_Control, Value: 'positive_gfp' - previously associated value to sample and item
        
        take [positive_gfp_control_plate], interactive: true
        
        display_rc_list = find_rc_from_alpha_coord(well)
        show do 
            title "Adding Positive GFP Control"
            separator
            note "To 96 Flat Bottom Plate <b>#{collection.id}</b>:"
            bullet "Fill <b>#{well}</b> with 200µl of liquid SC media"
            bullet "Pick colony from Yeast Plate <b>#{positive_gfp_control_plate.id}</b> & resuspend in the well highlighted below"
            table highlight_alpha_rc(collection, display_rc_list) {|r,c| "#{positive_gfp_control_plate.id}"}
            check "<b>Finally, place clear lid on top and tape shut before placing it on the plate shaker.</b>"
        end
        
        # Associate provenance data between control plate and collection
        control_plate_associations = AssociationMap.new(positive_gfp_control_plate)
        
        display_rc_list.each do |r, c|
            # Add control strain to collection
            collection_sample_matrix = collection.matrix
            collection_sample_matrix[r][c] = strain_sample_id
            collection.matrix = collection_sample_matrix 

            part = collection.part(r,c)
            part_associations = AssociationMap.new(part)
            add_provenance({
                           from: positive_gfp_control_plate,
                           from_map: control_plate_associations,
                           to: part,
                           to_map: part_associations,
                           additional_relation_data: { source_colony: 1, process: "resuspension" }
                         })

            # Associate additional data to this part
            part_associations.put('control', "positive_gfp")
            part_associations.save
            # Add control strain to collection
            # collection_sample_matrix = collection.matrix
            # collection_sample_matrix[r][c] = strain_sample_id
            # collection.matrix = collection_sample_matrix 
        end
        control_plate_associations.save
        
        need_to_create_new_control_plate = show do
            title "Checking Control Plate #{positive_gfp_control_plate}" 
            separator
            select ["Yes", "No"], var: "make_new_plate" , label: "Are there colonies left to be picked?" , default: 1
        end
        
        release [positive_gfp_control_plate], interactive: true
        return need_to_create_new_control_plate[:make_new_plate].to_s
    end
    
    
    # Finds where an alpha_coordinate is in a 96 Well plate
    #
    # @params alpha_coord [array or string] can be a single alpha_coordinate or a list of alpha_coordinate strings ie: 'A1' or ['A1','H7']
    # @return rc_list [Array] a list of [r,c] coordinates that describe where the alpha_coord(s) are in a 96 well matrix
    def find_rc_from_alpha_coord(alpha_coord)
        # look for where alpha coord is 2-D array coord
        coordinates_96 = ('A'..'H').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}} 
        rc_list = []
        if alpha_coord.instance_of? Array
            # alpha_coord = alpha_coord.map {|a| a.upcase}
            alpha_coord.each {|a_coord|
                coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == a_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } } 
            }
        else
            coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == alpha_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } }
        end
        return rc_list
    end
    
    
    def diluting_gfp_control(in_collection, out_collection, final_od=0.0003)
        in_data_matrix = in_map.get_data_matrix
        
        in_data_matrix.each_with_index do |row, r_idx|
            row.each_with_index do |part_data, c_idx|
                if !part_data.nil?
                    if part_data['control'] == 'positive_gfp'
                        # record relation between input and output parts, well position is the same
                        # for this transfer
                        from_part = in_collection.part(r_idx, c_idx)
                        to_part = out_collection.part(r_idx, c_idx)
                        in_map = AssociationMap.new(from_part)
                        out_map = AssociationMap.new(to_part)
                        add_provenance({
                                         from: from_part,
                                         from_map: in_map,
                                         to: to_part,
                                         to_map: out_map,
                                         additional_relation_data: { process: "dilution" }
                                       })
            
                        # Associate additional data to this part on output collection
                        out_map.put('control', "positive_gfp")
                        out_map.put('od600', "#{final_od}")
                        in_map.save
                        out_map.save

                        # manually populate sample_id matrix of output collection
                        out_collection.matrix[r_idx][c_idx] = in_collection.matrix[r_idx][c_idx]
                        out_collection.save
                    end
                end
            end
        end
    end

    def sync_gfp_control(gfp_input_cult_coord, gfp_output_cult_coord, input_plate_ods, final_output_vol)
        gfp_input_cult_coord = find_rc_from_alpha_coord(alpha_coord=gfp_input_cult_coord)
        gfp_input_cult_od = gfp_input_cult_coord.map {|r,c| input_plate_ods[r][c]}.first * 10 #dilution 1:10
        gfp_input_cult_vol = ((0.0003*final_output_vol)/gfp_input_cult_od) * 1000 # converting to ul
        gfp_input_media_vol = (1000.0 - gfp_input_cult_vol).round(2)
        return gfp_input_cult_vol, gfp_input_media_vol
    end

    
end # Module

library: {name: YG_Measure_OD_GFP, category: YG_Harmonization}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu
# 10/01/18

module YG_Measure_OD_GFP
    
    def transfer_cultures(in_item, out_item) 
        
        if debug
            in_item = Item.find(276614) # Contains new part_associations 100118
        end
        
        in_collection = Collection.find(in_item.id)
        out_collection = Collection.find(out_item.id)
        
        rc_list = in_collection.get_non_empty
        
        vol_display_matrix = get_vol_transfer_matrix(in_collection)
        log_info 'vol_display_matrix', vol_display_matrix
        show do
           title "Transfer Culture Aliquots to #{out_item.object_type.name} for Plate Reader" 
           separator
           check "Grab a clean <b>#{out_item.object_type.name}</b>."
           check "Label the #{out_item.object_type.name} => <b>#{out_item.id}</b>."
           check "Use a multi-channel pipettor to transfer the correct volume from <b>#{in_item.id}</b> to the <b>#{out_item.object_type.name}</b>."
           note "<b>Follow the table below to transfer the correct volume:</b>"
           table highlight_alpha_rc(in_item, rc_list) {|r,c| "#{vol_display_matrix[r][c]}µl"}
        end
        positive_sytox_rc = get_pos_sytox_rc(in_collection)
        show do 
            title "Adding Ethanol to Positive SYTOX Control"
            separator
            check "Get #{150*positive_sytox_rc.length}µl of 100% EtOH"
            bullet "Mix throughly by pipetting"
            note "<b>Follow the table below to add 150ul of EtOH to the correct well</b>"
            table highlight_alpha_rc(in_item, positive_sytox_rc){|r,c| "150µl"}
        end
        
        # Ensure that collection sample matricies get transferred
        in_coll_matrix = in_collection.matrix
        out_collection.matrix = in_coll_matrix
        out_collection.save
    end
    
    def get_vol_transfer_matrix(in_collection)
        vol_display_matrix = Array.new(in_collection.object_type.rows) { Array.new(in_collection.object_type.columns) {-1}}
        rc_list = in_collection.get_non_empty
        rc_list.each {|r,c|
            control_check = in_collection.get_part_data(:control, r, c)
            if control_check == 'negative_sytox'
                vol_display_matrix[r][c] = 150
            else
                vol_display_matrix[r][c] = 300
            end
            
        }
        return vol_display_matrix
        # Old part_data association matrix - 100118
        # vol_display_matrix = input_part_data_matrix.each_with_index.map {|row, r_idx| 
        #     row.each_with_index.map {|part_data_obj, c_idx|
        #         # ie: part_data_obj => {"source"=>[{"id"=>291209, "row"=>0, "column"=>0, "process"=>"dilution"}], "od600"=>0.0003}
        #         obj_keys = part_data_obj.keys
        #         if !obj_keys.empty?
        #             if obj_keys.include? 'control'
        #                 (part_data_obj[:control] == 'negative_sytox') ? trans_vol = 150 : trans_vol = 300
        #             else
        #                 trans_vol = 300
        #             end
        #         else
        #             trans_vol = -1
        #         end
        #         trans_vol
        #     }
        # }
    end
    def get_pos_sytox_rc(in_collection)
        positive_sytox_rc = []
        rc_list = in_collection.get_non_empty
        rc_list.each {|r,c|
            control_check = in_collection.get_part_data(:control, r, c)
            if control_check == 'negative_sytox'
                positive_sytox_rc.push([r,c])
            end
        }
        # Old part_data association matrix - 100118
        # vol_display_matrix = input_part_data_matrix.each_with_index.map {|row, r_idx| 
        #     row.each_with_index.map {|part_data_obj, c_idx|
        #         # ie: part_data_obj => {"source"=>[{"id"=>291209, "row"=>0, "column"=>0, "process"=>"dilution"}], "od600"=>0.0003}
        #         obj_keys = part_data_obj.keys
        #         if !obj_keys.empty?
        #             if obj_keys.include? 'control'
        #                 (part_data_obj[:control] == 'positive_sytox') ? positive_sytox_rc.push([r_idx, c_idx]) : nil
        #             end
        #         end
        #     }
        # }
        return positive_sytox_rc
    end
    
    def get_timepoint(op, tpoint_param)
        return op.input(tpoint_param).val.to_i
    end
    
    def get_media_type(in_item)
        media = in_item.get('type_of_media')
        media = media.nil? ? 'SC' : media
        return media
    end


end # Module YG_Measure_OD_GFP
